PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = fb_task
  Units = use prefs
  Screen = 1
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Routines
  Routine outro
    TextComponent outro_scr
      text = Thank you for your participation
      stopVal [condition] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent fb_team
      text [set every repeat] = $teamText
      stopVal [duration (s)] = 3
      pos = [0, .7]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    ImageComponent fb_images
      stopVal [duration (s)] = 3
      units = pix
      texture resolution = 64
      startVal [time (s)] = 0
      image [set every repeat] = $stimFile
      size = [297*1.5,317*1.5]
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  Routine intro
    TextComponent intro_scr
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please watch the next series
        of images carefully.

        Press spacebar to begin.
    KeyboardComponent space_start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine fix_2
    TextComponent fix
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stimFile': 'collingwood_fc_images/jolly_darren.png', 'random': 0.1431996298, 'teamText': 'Collingwood', 'stimTrig': 2},
      {'stimFile': 'essendon_fc_images/van_unen_dylan.png', 'random': 0.5792454339, 'teamText': 'Essendon', 'stimTrig': 1},
      {'stimFile': 'essendon_fc_images/baguley_mark.png', 'random': 0.3859293635, 'teamText': 'Essendon', 'stimTrig': 1},
      {'stimFile': 'collingwood_fc_images/fasolo_alex.png', 'random': 0.46922319240000004, 'teamText': 'Collingwood', 'stimTrig': 2},
      {'stimFile': 'essendon_fc_images/watson_jobe.png', 'random': 0.8796758551999999, 'teamText': 'Essendon', 'stimTrig': 1},
      {'stimFile': 'collingwood_fc_images/mooney_caolan.png', 'random': 0.4189773523, 'teamText': 'Collingwood', 'stimTrig': 2},
      {'stimFile': 'essendon_fc_images/kommer_nick.png', 'random': 0.8785546336, 'teamText': 'Essendon', 'stimTrig': 1},
      {'stimFile': 'collingwood_fc_images/martin_kyle.png', 'random': 0.9095531243000001, 'teamText': 'Collingwood', 'stimTrig': 2},
      {'stimFile': 'collingwood_fc_images/travis_cloke.png', 'random': 0.601807012, 'teamText': 'Collingwood', 'stimTrig': 2},
      {'stimFile': 'essendon_fc_images/hardingham_kyle.png', 'random': 0.6059659535999999, 'teamText': 'Essendon', 'stimTrig': 1},
      {'stimFile': 'collingwood_fc_images/thomas_dale.png', 'random': 0.6618707345, 'teamText': 'Collingwood', 'stimTrig': 2},
      {'stimFile': 'collingwood_fc_images/obrien_harry.png', 'random': 0.962565098, 'teamText': 'Collingwood', 'stimTrig': 2}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
    Routine fix_2
    Routine trial
  LoopTerminator trials
  Routine outro
